opentrons/protocol-designer 7.0.2
schemaVersion: 7
protocolName: Cell Tranfer
author: Longwei
description: Transfer cells from 96-well plate to 384-well plate
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p300_multi_gen2: {mount: left}
labwareLocationUpdate:
  Opentrons 96 Tip Rack 300 µL: {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 1}
  Thermo Scientific Nunc 96 Well Plate 1300 µL: {loadName: thermoscientificnunc_96_wellplate_1300ul, namespace: opentrons, version: 1, location: 2}
  Bio-Rad 384 Well Plate 50 µL: {loadName: biorad_384_wellplate_50ul, namespace: opentrons, version: 2, location: 3}
  fixedTrash: {location: {slotName: 12}}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Cell: {description: GBM cells}
ingredLocations:
  Thermo Scientific Nunc 96 Well Plate 1300 µL:
    Cell {volume: 1000}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 40
  path: single
  changeTip: once
  aspirate_labware: Thermo Scientific Nunc 96 Well Plate 1300 µL
  aspirate_wells: A1-A12
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  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: A1-A12
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 40
  path: single
  changeTip: never
  aspirate_labware: Thermo Scientific Nunc 96 Well Plate 1300 µL
  aspirate_wells: A1-A12
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  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: B1-B12
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 40
  path: single
  changeTip: never
  aspirate_labware: Thermo Scientific Nunc 96 Well Plate 1300 µL
  aspirate_wells: A1-A12
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  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: A13-A24
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 40
  path: single
  changeTip: never
  aspirate_labware: Thermo Scientific Nunc 96 Well Plate 1300 µL
  aspirate_wells: A1-A12
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  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: B13-B24
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p300_multi_gen2, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_multi_gen2, volume: 40, labwareId: Thermo Scientific Nunc 96 Well Plate 1300 µL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 40, labwareId: Bio-Rad 384 Well Plate 50 µL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 94}
- aspirate: {pipetteId: p300_multi_gen2, volume: 40, labwareId: Thermo Scientific Nunc 96 Well Plate 1300 µL, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 40, labwareId: Bio-Rad 384 Well Plate 50 µL, wellName: A2, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 94}
- aspirate: {pipetteId: p300_multi_gen2, volume: 40, labwareId: Thermo Scientific Nunc 96 Well Plate 1300 µL, wellName: A3, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 94}
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