opentrons/protocol-designer 7.0.2
schemaVersion: 7
protocolName: SynergyMatrix_Dillution
author: Longwei Zhang
description: SynergyMatrix_Dilution
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p300_multi_gen2: {mount: left}
labwareLocationUpdate:
  NEST 96 Deep Well Plate 2mL (slot 2): {loadName: nest_96_wellplate_2ml_deep, namespace: opentrons, version: 2, location: 2}
  Opentrons 96 Filter Tip Rack 1000 µL: {loadName: opentrons_96_filtertiprack_1000ul, namespace: opentrons, version: 1, location: 1}
  NEST 96 Deep Well Plate 2mL (slot 3): {loadName: nest_96_wellplate_2ml_deep, namespace: opentrons, version: 2, location: 3}
  Opentrons 96 Tip Rack 1000 µL: {loadName: opentrons_96_tiprack_1000ul, namespace: opentrons, version: 1, location: 11}
  fixedTrash: {location: {slotName: 12}}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_tiprack_1000ul/1
ingredients:
  - CT-179: {serialize: true}
  - HBSS + DMSO
  - HBSS
  - Drug1
  - Drug2
  - Drug3
  - Drug4
  - Drug5
  - Drug6
  - Drug7
ingredLocations:
  NEST 96 Deep Well Plate 2mL (slot 2):
    HBSS {volume: 2000}: A1-H1
    HBSS + DMSO {volume: 1000}: A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7
  NEST 96 Deep Well Plate 2mL (slot 3):
    CT-179 {volume: 24}: A1
    Drug1 {volume: 24}: B1
    Drug2 {volume: 24}: C1
    Drug3 {volume: 24}: D1
    Drug4 {volume: 24}: E1
    Drug5 {volume: 24}: F1
    Drug6 {volume: 24}: G1
    Drug7 {volume: 24}: H1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 998
  path: single
  changeTip: once
  aspirate_labware: NEST 96 Deep Well Plate 2mL (slot 2)
  aspirate_wells: A1
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  dispense_labware: NEST 96 Deep Well Plate 2mL (slot 3)
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 998
  path: single
  changeTip: never
  aspirate_labware: NEST 96 Deep Well Plate 2mL (slot 2)
  aspirate_wells: A1
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  dispense_labware: NEST 96 Deep Well Plate 2mL (slot 3)
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: NEST 96 Deep Well Plate 2mL (slot 2)
  aspirate_wells: A2-A7
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  dispense_labware: NEST 96 Deep Well Plate 2mL (slot 3)
  dispense_wells: A2-A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: NEST 96 Deep Well Plate 2mL (slot 3)
  aspirate_wells: A1-A5
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 200
  dispense_labware: NEST 96 Deep Well Plate 2mL (slot 3)
  dispense_wells: A2-A6
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p300_multi_gen2, labwareId: Opentrons 96 Tip Rack 1000 µL, wellName: A1}
- aspirate: {pipetteId: p300_multi_gen2, volume: 300, labwareId: NEST 96 Deep Well Plate 2mL (slot 2), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 300, labwareId: NEST 96 Deep Well Plate 2mL (slot 3), wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 94}
- aspirate: {pipetteId: p300_multi_gen2, volume: 300, labwareId: NEST 96 Deep Well Plate 2mL (slot 2), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 300, labwareId: NEST 96 Deep Well Plate 2mL (slot 3), wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 94}
- aspirate: {pipetteId: p300_multi_gen2, volume: 300, labwareId: NEST 96 Deep Well Plate 2mL (slot 2), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 94}
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